/*
 * Macro template to process multiple images in a folder
 */

#@ File (label = "Input directory", style = "directory") input
#@ File (label = "Output directory", style = "directory") output
#@ String (label = "File suffix", value = "photons.asc") suffix

#@ String (label = "File name suffix, e.g. photons (not extensions like .tif)") imageType
// See also Process_Folder.py for a version of this code
// in the Python scripting language.

setBatchMode(true);
processFolder(input);

// function to scan folders/subfolders/files to find files with correct suffix
function processFolder(input) {
	list = getFileList(input);
	list = Array.sort(list);
	for (i = 0; i < list.length; i++) {
		if(endsWith(list[i], suffix))
		 	saveastif(input, output, list[i]);
	}
}

function saveastif(input, file) {
	run("Text Image... ", "open=["+ input + File.separator  +file+"]");
	saveAs("Tiff", input + File.separator +file );
}
